PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'participant': u'1', u'Name': u'Leo'}
  expName = main
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Introduction
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        Benvenuti!

        State per iniziare un esperimento composto da due parti.
        Ogni parte è introdotta dalle istruzioni che vi spiegheranno ciò che dovete fare in seguito.
        Alla fine della prima parte, ci sarà una piccola pausa indicata da un messaggio. Grazie per la vostra partecipazione all'esperimento!
    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.5
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  Routine question
    TextComponent question_text
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.09
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      text:
        La conclusione segue dalla premesse?


                SI                           NO
    KeyboardComponent response_to_question_text
      forceEndRoutine = True
      allowedKeys = 'a', 'l'
      startVal [time (s)] = 0.0
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  Routine arguments
    TextComponent text
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.1
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      text [set every repeat]:
        'P1: ' + $premise1 +
        '\n\n' +
        'P2: ' + $premise2 +
        '\n_______________________________\n\n' +
        'C: ' + $conclusion
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine feedback
    TextComponent text_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.1
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      text [set every repeat]:
        'P1: ' + $premise1.replace('...', $TW) +
        '\n\n' +
        'P2: ' + $premise2.replace('...', $TW) +
        '\n_______________________________\n\n' +
        'C: ' + $conclusion
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli/arguments.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'ArgumentType': u'TPFC', u'Argument': u'La prugna contiene il \u201a\xc4\xb6 |Il ... \u221a\xae un albero |La prugna contiene un albero', u'ArgumentNumber': 1, u'TWType': u'O', u'premise2': u'Il \u2026 \xe8 un albero', u'TW': u'NOCCIOLO', u'premise1': u'La prugna contiene il \u2026', u'CorrectAnswer': u'N', u'ArgumentBlock': u'T', u'conclusion': u'La prugna contiene un albero'},
      {u'ArgumentType': u'TPFC', u'Argument': u'Una certa quantit\u221a\u2020 \u221a\xae un ... |Un ... scava buche |Una certa quantit\u221a\u2020 scava buche', u'ArgumentNumber': 2, u'TWType': u'O', u'premise2': u'Il \u2026 \xe8 un albero', u'TW': u'TASSO', u'premise1': u'La prugna contiene il \u2026', u'CorrectAnswer': u'N', u'ArgumentBlock': u'T', u'conclusion': u'La prugna contiene un albero'},
      {u'ArgumentType': u'TPFC', u'Argument': u'Fabrizio Corona \u221a\xae un ... |Un ... \u221a\xae un fiore |Fabrizio Corona \u221a\xae un fiore', u'ArgumentNumber': 3, u'TWType': u'O', u'premise2': u'Il \u2026 \xe8 un albero', u'TW': u' NARCISO', u'premise1': u'La prugna contiene il \u2026', u'CorrectAnswer': u'N', u'ArgumentBlock': u'T', u'conclusion': u'La prugna contiene un albero'},
      {u'ArgumentType': u'TPFC', u'Argument': u'I capelli hanno un ... |Un ... \u221a\xae un porcospino |I capelli hanno un porcospino', u'ArgumentNumber': 4, u'TWType': u'O', u'premise2': u'Il \u2026 \xe8 un albero', u'TW': u'RICCIO', u'premise1': u'La prugna contiene il \u2026', u'CorrectAnswer': u'N', u'ArgumentBlock': u'T', u'conclusion': u'La prugna contiene un albero'}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
    Routine arguments
    Routine feedback
    Routine question
  LoopTerminator trials
